OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  MI_Cursor_test.m

  This scenario runs MI cursor task - calibration phase
  - MI Practice procedure
  1. fixation cross
  2. left or right arrow instruction
  3. cursor move (hit or miss) - visual feedback
  4. blank

  Matlab to OV (Marker): port 15361
  OV to Matlab (Data): port 5678

  Run Procedure
  1. Run OV scenario first
  2. Run Matlb code

  Before running the scenario, specify the path of CSP and LDA trained.
Comment
  Matlab Scripting

  path: trained model path
  chCSP:
   - on - 1:19 ch for training/applying CSP
   - off - 1:9 ch for training/applying CSP
  nCSP: number of CSP filters (1: first and last, 2: first 2 and last 2)

Acquisition client "EEG" => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Signal=#0.Signal stream, Stimulation=#0.Stimulations -> GDF file writer
  Filename = C:/Users/BioComput_HGKim/Desktop/khwon/Stim_for_MI/dat/Cursor-test-[$core{date}-$core{time}].gdf
Input signal=#0.Signal stream, Input stimulations=#0.Stimulations -> Stimulation based epoching
  Epoch duration (in sec) = 3.0
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Number_03
-> Channel Selector "!X1;X2;X3;A2"
  Channel List = X1;X2;X3;A2
  Action = Reject
  Channel Matching Method = Smart
-> Matlab Scripting
  Box clock frequency in Hz = 1
  Matlab executable (path) = C:/Program Files/Polyspace/R2020a/bin/win64/matlab.exe
  Matlab working directory = C:/Users/BioComput_HGKim/Desktop/khwon/Stim_for_MI/matlabbox_ov
  Initialize function = MIBCI_cursor_Initialize
  Process function = MIBCI_cursor_Process
  Uninitialize function = MIBCI_cursor_Uninitialize
  CSP_LDA (path) = C:/Users/BioComput_HGKim/Desktop/khwon/Stim_for_MI/sh.mat
  WholeChCSP (on: 1:19, off:1:9) = off
  nb CSPs (first and last "n" filters) = 1
-> Signal average => #5
-> Channel Selector "P3"
  Channel List = P3
  Action = Select
  Channel Matching Method = Smart
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#5 -> TCP Writer
  Port = 5678
  Output format = Raw
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_Number_1F
  Action to perform = Stop
#0.Signal stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Temporal Filter => #11
  Filter Method = Butterworth
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 58
  High Cut-off Frequency (Hz) = 62
  Band Pass Ripple (dB) = 0.5
Data=#11, Stimulations=#0.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
