OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  MI_Cursor_train.m

  This scenario runs MI cursor task - calibration phase
  - MI Practice procedure
  1. fixation cross
  2. left or right arrow instruction
  3. blank (none-feedback)

  Matlab to OV (Marker): port 15361

  Run Procedure
  1. Run OV scenario first
  2. Run Matlb code

  After the end of the scenario, train CSP and LDA for MI_Cursor_test

Acquisition client "EEG" => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_Number_1F
  Action to perform = Stop
Input signal=#0.Signal stream, Input stimulations=#0.Stimulations -> Stimulation based epoching
  Epoch duration (in sec) = 3.0
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Number_03
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 58
  High Cut-off Frequency (Hz) = 62
  Band Pass Ripple (dB) = 0.5
-> Channel Selector "1:4"
  Channel List = 1:4
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = x*x
-> Signal average
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Signal=#0.Signal stream, Stimulation=#0.Stimulations -> GDF file writer
  Filename = C:/Users/BioComput_HGKim/Desktop/khwon/Stim_for_MI/dat/Cursor-train-[$core{date}-$core{time}].gdf
#0.Signal stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Temporal Filter => #11
  Filter Method = Butterworth
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 58
  High Cut-off Frequency (Hz) = 62
  Band Pass Ripple (dB) = 0.5
Data=#11, Stimulations=#0.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
