OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  MI_Practice.m

  This scenario runs MI practice task.
  - MI Practice procedure
  1. fixation cross
  2. left or right arrow instruction
  3. visual feedback (C3 and C4 power) or non-feedback

  Matlab to OV (Marker): port 15361
  OV to Matlab (Data): port 5678

  Run Procedure
  1. Run OV scenario first
  2. Run Matlb code

  Notes
  When you don't want to give visual feedback,
  disable TCP Writer box

Acquisition client "EEG" => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input signal=#0.Signal stream, Input stimulations=#0.Stimulations -> Stimulation based epoching
  Epoch duration (in sec) = 3.5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Number_03
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Channel Selector "1:4"
  Channel List = 1:4
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP
  Equation = x*x
-> Signal average => #5
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#5 -> TCP Writer
  Port = 5678
  Output format = Raw
#0.Signal stream -> Temporal Filter => #8
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
Data=#8, Stimulations=#0.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#0.Signal stream, Stimulation=#0.Stimulations -> GDF file writer
  Filename = C:/Users/BioComput_HGKim/Desktop/khwon/Stim_for_MI/dat/MI-practice-[$core{date}-$core{time}].gdf
