OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Temporal Filter => #2
  Filter Method = Butterworth
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 58
  High Cut-off Frequency (Hz) = 62
  Band Pass Ripple (dB) = 0.5
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#0.Signal stream, Stimulation=#0.Stimulations -> GDF file writer
  Filename = C:/Users/BioComput_HGKim/Desktop/khwon/Stim_for_MI/dat/RestingState-[$core{date}-$core{time}].gdf
